PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = BR_Current
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 'space' to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    TextComponent Visualization
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine Cue
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    TextComponent CueText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Cue
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  Routine BR
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    ImageComponent BRimages
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BR_Excel.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'image': 'images/Practice_Gabor_copy.png', 'Cue': 'R'},
      {'image': 'images/Practice_Gabor_copy.png', 'Cue': 'G'}]
    Routine Cue
    Routine Blank
    Routine BR
  LoopTerminator trials
